PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u"/data/" + os.sep + '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'version': 'A', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = devaluation
  logging level = data
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Routines
  Routine instr
    CodeComponent init
      Code Type = Auto->JS
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      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = "version " + expInfo['version'])
    TextComponent test_trigger
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        You have found one of the original
        vending machines. As before you
        won't be shown any snacks on
        screen. Use your memory to tilt it
        for the snack you want.

        Try to steal as much as you can, as
        this will determine what you will eat
        afterwards!

                   Press space to begin
    KeyboardComponent trigger_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finish
    TextComponent finish_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = Thankyou!
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  Routine feedback
    TextComponent text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text [set every repeat]:
              Thankyou!

                                                                       Final stage complete
  Routine hunger
    RatingScaleComponent Hunger_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    TextComponent Hunger_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How hungry are you right now?
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  Routine ITI
    CodeComponent duration_code
      Code Type = Auto->JS
      Begin Routine:
        dur = randint(5,10)
        tilt = 0
    TextComponent fixation
      color = LightGray
      durationEstim = 5
      letterHeight = .5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
      text = +
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  Routine Teddies
    RatingScaleComponent teddy_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent teddy_ratingImage
      image = images/teddy.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent teddy_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = .075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like tiny teddies?
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  Routine MMs
    RatingScaleComponent MM_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent MM_ratingImage
      image = images/M&M.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent MM_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like M&Ms?
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  Routine test
    CodeComponent checkKeys
      Code Type = Auto->JS
      Begin Routine:
        tilt = 0
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = 'start')
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']):
         pressL = pressL+1
         tilt = -15

        if event.getKeys(['v']):
         pressR=pressR+1
         tilt = 15
      End Routine:
        logging.log(level=logging.DATA, msg = 'end')
    PatchComponent CStest
      durationEstim = 6
      image = images/vend.png
      mask = none
      ori [set every frame] = $tilt
      phase = 0
      sf = none
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      texture resolution = 512
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  Routine BBQ
    RatingScaleComponent BBQ_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent BBQ_ratingImage
      image = images/BBQ.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent BBQ_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like BBQ shapes?
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine test
    Routine ITI
  LoopTerminator trials
  Routine Teddies
  Routine MMs
  Routine BBQ
  Routine hunger
  Routine finish
