PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u"/data/" + os.sep + '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'version': 'A', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = instrumental
  logging level = data
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Routines
  Routine A
    CodeComponent A_counter
      Code Type = Auto->JS
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']): #tilt left
         tilt = -15

        if event.getKeys(['v']): #tilt right
         tilt=15
      End Routine:
        pressL=0 #reset left button count
        pressR=0 #reset right button count
    ImageComponent vendingA_image
      image = images/vend.png
      ori [set every frame] = $tilt
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rewardA_image
      image = $rewardA
      pos = [0, -0.5]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine rate_Teddies
    RatingScaleComponent teddy_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent teddy_ratingImage
      image = images/teddy.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent teddy_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = .075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like tiny teddies?
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  Routine B
    CodeComponent B_counter
      Code Type = Auto->JS
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']): #tilt left
         tilt = -15

        if event.getKeys(['v']): #tilt right
         tilt=15
      End Routine:
        pressL=0 #reset left button count
        pressR=0 #reset right button count
    ImageComponent vendingB_image
      image = images/vend.png
      ori [set every frame] = $tilt
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rewardB_image
      image = $rewardB
      pos = [0, -0.5]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
      Begin Experiment:
        nTest=25
        Error=6
      Begin Routine:
        if test_response.corr:
          msg1="correct!"
          logging.log(level=logging.DATA, msg = 'correct')
          Error=Error-1
        else:
          msg1="Oops! That was wrong"
          logging.log(level=logging.DATA, msg = 'Oops!')
          Error=6
      End Routine:
        logging.flush()
        if Error<1:
         tests.finished=True
    TextComponent feedback_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg1
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  Routine rate_Hunger
    RatingScaleComponent Hunger_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    TextComponent Hunger_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How hungry are you right now?
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  Routine rate_BBQ
    RatingScaleComponent BBQ_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent BBQ_ratingImage
      image = images/BBQ.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent BBQ_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like BBQ shapes?
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  Routine Trial
    CodeComponent counterbalancing
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['version'] == 'A':
           rewardA = 'images/M&M.png'
           rewardB = 'images/BBQ.png'
           logging.log(level=logging.DATA, msg = 'version A')
        if expInfo['version'] == 'B':
           rewardA = 'images/BBQ.png'
           rewardB = 'images/M&M.png'
           logging.log(level=logging.DATA, msg = 'version B')
        if expInfo['version'] == 'C':
           rewardA = 'images/teddy.png'
           rewardB = 'images/BBQ.png'
           logging.log(level=logging.DATA, msg = 'version C')
        if expInfo['version'] == 'D':
           rewardA = 'images/BBQ.png'
           rewardB = 'images/teddy.png'
           logging.log(level=logging.DATA, msg = 'version D')
        if expInfo['version'] == 'E':
           rewardA = 'images/M&M.png'
           rewardB = 'images/teddy.png'
           logging.log(level=logging.DATA, msg = 'version E')
        if expInfo['version'] == 'F':
           rewardA = 'images/teddy.png'
           rewardB = 'images/M&M.png'
           logging.log(level=logging.DATA, msg = 'version F')
    CodeComponent checkKeys
      Code Type = Auto->JS
      Begin Experiment:
        #initialise counters
        pressL=0
        pressR=0
        tilt=0
      Begin Routine:
        VR=randint(5,10)
      Each Frame:
        if tilt > 0: #keep vending upright
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']): #tilt left
         pressL = pressL+1
         pressR = 0
         tilt = -15

        if pressL>VR: #win A
         logging.log(level=logging.DATA, msg = 'win A')
         nRepA=1
         nRepB=0
         continueRoutine=False

        if event.getKeys(['v']): #tilt right
         pressR=pressR+1
         pressL=0
         tilt=15

        if pressR>VR: #win B
         logging.log(level=logging.DATA, msg = 'win B')
         nRepA=0
         nRepB=1
         continueRoutine=False
    ImageComponent vending_machine
      image = images/vend.png
      ori [set every frame] = $tilt
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine rate_MMs
    RatingScaleComponent MM_rating
      customize_everything = acceptPreText='key, enter'
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.5
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    ImageComponent MM_ratingImage
      image = images/M&M.png
      pos = [0, 0.1]
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent MM_ratingText
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = How much do you like M&Ms?
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  Routine finish
    TextComponent finish_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
          Thankyou!

        End of Stage 1
  Routine test
    CodeComponent test_code
      Code Type = Auto->JS
      Begin Routine:
        if nRepB == 1:
          testImage=rewardB
          correctAns='v'
        if nRepA == 1:
          testImage=rewardA
          correctAns='t'
    TextComponent test_question
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = Which direction did you tilt to get:
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    TextComponent test_instructions
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      text = Press left or right button
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    ImageComponent test_image
      image [set every repeat] = $testImage
      size = [0.4, 0.5]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent test_response
      allowedKeys = 't','v'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent Instructions_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Someone has said you can get free
        snacks from our vending machine.

        Use the button box to tilt the
        machine to the left and right, and
        learn how to steal different snacks!




                   Press space to begin
    KeyboardComponent spacetobegin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine rate_Teddies
  Routine rate_MMs
  Routine rate_BBQ
  Routine rate_Hunger
  Routine instructions
  LoopInitiator tests loopType="TrialHandler"
    loopType = random
    nReps = nTest
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine Trial
      LoopInitiator repA loopType="TrialHandler"
        loopType = random
        nReps = nRepA
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        Routine A
      LoopTerminator repA
      LoopInitiator repB loopType="TrialHandler"
        loopType = random
        nReps = nRepB
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        Routine B
      LoopTerminator repB
    LoopTerminator trials
    Routine test
    Routine feedback
  LoopTerminator tests
  Routine finish
