PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u"/data/" + os.sep + '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'version': 'A', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.0,-1.0,-1.0]
  expName = pavlov
  logging level = data
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Routines
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg="msg not updated!"
      Begin Routine:
        logging.log(level=logging.DATA, msg = 'test_' + thisBlock["testCS"])
        if len(key_resp_2.keys)<1:
          msg="Failed to respond"
        elif key_resp_2.corr:
          msg="correct!"
          logging.log(level=logging.DATA, msg = 'correct')
        else:
          msg="Oops! That was wrong"
          logging.log(level=logging.DATA, msg = 'Oops!')
    TextComponent feedback_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine ITI
    CodeComponent set_ITI
      Code Type = Auto->JS
      Begin Routine:
        delta = randint(-5,5)
        ITIdur = 3
    PatchComponent vend
      image = images/vend.png
      sf = None
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine Instr
    TextComponent Ready
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        We have discovered that people
        were stealing from the vending
        machines! We have upgraded the
        machine to make them harder to
        steal from. However, when the
        machine is overstocked a free snack
        will fall out.

        The lights on the front panel
        indicate whether the machine is
        overstocked. Watch the lights and
        learn which snacks fall out. A
        multiple choice question will test
        what you have learnt. Use the
        keyboard [a b c d] to indicate the
        correct answer.




                 press space to begin
    KeyboardComponent Begin_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent init
      Code Type = Auto->JS
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      Begin Experiment:
        yellowSize = 0
        blueSize = 0
        logging.log(level=logging.DATA, msg = "version " + expInfo['version'])
  Routine Choice
    PatchComponent vend_testy
      image [set every repeat] = $testCS
      sf = None
      size = [1.5, 2]
      startEstim = 0
      startVal [frame N] = 0
      texture resolution = 512
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    TextComponent choice_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      pos = [0, -0.4]
      startEstim = 1
      startVal [frame N] = 60
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      text:
        Which snack is overstocked?

        a) M&Ms
        b) BBQ
        c) tiny teddy
        d) empty
    KeyboardComponent key_resp_2
      allowedKeys = 'a','b','c','d'
      correctAns = $correctAns
      forceEndRoutine = True
      startEstim = 1
      startVal [frame N] = 60
      store = first key
      storeCorrect = True
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  Routine trial
    PatchComponent vend_CS
      color [set every repeat] = $[1,1,1]
      durationEstim = 3
      image [set every repeat] = $CS
      mask = none
      phase = 0
      sf = none
      size = [1.5, 2]
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = 180
      texture resolution = 512
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    PatchComponent Outcome
      durationEstim = 2
      image [set every repeat] = $US
      mask = none
      pos = [0, -0.4]
      sf = None
      size = [0.4, 0.5]
      startEstim = 1
      startVal [frame N] = 60
      stopVal [duration (frames)] = 120
      texture resolution = 512
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  Routine test
    PatchComponent vend_test
      durationEstim = 3
      image [set every repeat] = $testCS
      mask = none
      phase = 0
      sf = none
      size = [2, 2]
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 180
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  Routine Thankyou
    TextComponent Thankyou_text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
             Thankyou!

        Stage 2 completed
Flow
  Routine Instr
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = Pavlov_blocks.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'testCS': 'images/red.png', 'correctAns': 'a'},
      {'testCS': 'images/green.png', 'correctAns': 'b'},
      {'testCS': 'images/blue.png', 'correctAns': 'c'},
      {'testCS': 'images/yellow.png', 'correctAns': 'd'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Pavlov_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'CS': 'images/red.png', 'US': 'images/M&M.png'},
        {'CS': 'images/green.png', 'US': 'images/BBQ.png'},
        {'CS': 'images/blue.png', 'US': 'images/teddy.png'},
        {'CS': 'images/yellow.png', 'US': 'images/empty.png'}]
      Routine ITI
      Routine trial
    LoopTerminator trials
    Routine ITI
    Routine Choice
    Routine feedback
  LoopTerminator blocks
  Routine Thankyou
