PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Data filename = u"/data/" + os.sep + '%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'version': 'A', 'participant': ''}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = transfer
  logging level = data
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Routines
  Routine test
    PatchComponent CStest
      durationEstim = 3
      image [set every repeat] = $CS
      mask = none
      ori [set every frame] = $tilt
      phase = 0
      sf = none
      size = [1.5, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
      texture resolution = 512
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    CodeComponent checkKeys
      Code Type = Auto->JS
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      Begin Routine:
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = 'start_' + thisTrial['CS'] )
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']):
         pressL = pressL+1
         tilt = -15

        if event.getKeys(['v']):
         pressR=pressR+1
         tilt = 15
      End Routine:
        logging.log(level=logging.DATA, msg = 'end_' + thisTrial['CS'])
        logging.flush()
  Routine feedback
    TextComponent text
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
              Thankyou!

        Stage 3 completed
  Routine instr
    CodeComponent init
      Code Type = Auto->JS
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      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = "version " + expInfo['version'])
    TextComponent test_trigger
      color = LightGray
      font = Helvetica Bold
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Now you have found one of the
        new secure machines. At random
        intervals we will overstock it with a
        different snack. You will be given an
        opportunity to steal from the
        machine when it is overstocked.

        However, to test your memory no
        snacks will appear on the screen.
        Remember what you have learned
        and steal as many snacks as you
        can.


                Press space to begin
    KeyboardComponent trigger_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Transfer_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Onset': 0, 'CS': 'images/fix.png', 'Duration': 6},
      {'Onset': 9, 'CS': 'images/red.png', 'Duration': 5},
      {'Onset': 15, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 31, 'CS': 'images/blue.png', 'Duration': 5},
      {'Onset': 37, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 44, 'CS': 'images/green.png', 'Duration': 5},
      {'Onset': 50, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 58, 'CS': 'images/yellow.png', 'Duration': 5},
      {'Onset': 64, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 75, 'CS': 'images/red.png', 'Duration': 5},
      {'Onset': 81, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 96, 'CS': 'images/green.png', 'Duration': 5},
      {'Onset': 102, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 105, 'CS': 'images/blue.png', 'Duration': 5},
      {'Onset': 111, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 120, 'CS': 'images/yellow.png', 'Duration': 5},
      {'Onset': 126, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 136, 'CS': 'images/red.png', 'Duration': 5},
      {'Onset': 142, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 157, 'CS': 'images/green.png', 'Duration': 5},
      {'Onset': 163, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 173, 'CS': 'images/blue.png', 'Duration': 5},
      {'Onset': 179, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 194, 'CS': 'images/yellow.png', 'Duration': 5},
      {'Onset': 200, 'CS': 'images/vend.png', 'Duration': 9},
      {'Onset': 215, 'CS': 'images/red.png', 'Duration': 5},
      {'Onset': 221, 'CS': 'images/vend.png', 'Duration': 9}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
    Routine test
  LoopTerminator trials
  Routine feedback
